{
    "actions": {
        "acqdatetime": {
            "filters": {}, 
            "params": {}
        }, 
        "header_series": {
            "filters": {}, 
            "params": {
                "info": "qc"
            }
        }, 
        "qc_series": {
            "filters": {}, 
            "params": {
                "art_borderpx_lrtb": "0;0;0;0", 
                "info": "qc"
            }
        }
    }, 
    "cfgformat": "20180910", 
    "comments": {
        "author": "Arnold Schilham, UMCU", 
        "creator": "generate_config_json.py version 20180912", 
        "description": "MG/Flatfield for Philips Microdose L50", 
        "version": "20161219"
    }, 
    "info": {
        "acqdatetime": {
            "params": {}
        }, 
        "header_series": {
            "params": {}
        }, 
        "qc_series": {
            "params": {
                "art_borderpx_lrtb": "skip this number of pixels in artefact evaluation for left, right, top, bottom of image"
            }
        }
    }
}